<?xml version="1.0" encoding="UTF-8"?>
<configuration>
  <version>2</version>

  <readers>
    <reader>
      <dll>gadgetron_core_readers</dll>
      <classname>AcquisitionReader</classname>
    </reader>
  </readers>

  <stream>
 
    <!-- Acquisitions -->

    <!-- Data accumulation and trigger gadget -->
    <gadget>
      <name>AccTrig</name>
      <dll>gadgetron_mricore</dll>
      <classname>AcquisitionAccumulateTriggerGadget</classname>
      <property><name>trigger_dimension</name><value>repetition</value></property>
      <property><name>sorting_dimension</name><value>slice</value></property>
    </gadget>

    <gadget>
      <name>Buff</name>
      <dll>gadgetron_mricore</dll>
      <classname>BucketToBufferGadget</classname>
      <property><name>N_dimension</name><value></value></property>
      <property><name>S_dimension</name><value></value></property>
      <property><name>split_slices</name><value>true</value></property>
      <property><name>ignore_segment</name><value>true</value></property>
    </gadget>

    <!-- ReconData -->

    <gadget>
      <dll>gadgetron_mricore</dll>
      <classname>SimpleReconGadget</classname>
    </gadget>

    <!-- ImageArrays -->

    <gadget>
      <dll>gadgetron_mricore</dll>
      <classname>ImageArraySplitGadget</classname>
    </gadget>

    <!-- Images; Complex -->

    <gadget>
      <dll>gadgetron_mricore</dll>
      <classname>ComplexToFloatGadget</classname>
    </gadget>

    <!-- Images; Real -->

    <external>
      <execute name="nifti_python_gadgetron_svrtk_result" target="IsmrmrdToNiftiGadget" type="python"/>
      <configuration/>
    </external> 
    
  </stream>

  <writers>
    <writer>
      <dll>gadgetron_core_writers</dll>
      <classname>ImageWriter</classname>
    </writer>
  </writers>

</configuration>
